PsychoPy2experiment version="2025.2.3"
Settings
  Completed URL = https://rutgers.ca1.qualtrics.com/jfe/form/SV_9LgaDNDbNhqMQvQ
  Data filename = u'data/%s_%s_%s' % (expInfo['First Name'], expName, expInfo['date'])
  Experiment info = {'RUID': 'INPUT RUID HERE', 'Email Address': 'INPUT EMAIL ADDRESS HERE', 'First Name': 'INPUT FIRST NAME HERE', 'Last Name': 'INPUT LAST NAME HERE'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Test_A.xlsx', 'blacksquare.png', 'noresponse.png', 'practice_Test.xlsx', 'test_short2.csv']
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 960]
  color = black
  expName = DAR_MATH
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine GetReady
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    TextComponent fixation
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
      units = height
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    TextComponent text_4
      letterHeight = .1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Confidence
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    TextComponent R2_target_conf
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $confrating_dur
      text [set every repeat] = $targetword
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    TextComponent R2_word1_conf
      letterHeight = $word_height
      pos = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $confrating_dur
      text [set every repeat] = $'1) ' + topsideword
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    TextComponent R2_word2_conf
      letterHeight = $word_height
      pos = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $confrating_dur
      text [set every repeat] = $'2) ' + bottomsideword
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    TextComponent conf_question
      letterHeight = question_height
      pos = (0, confscale_yoffset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $confrating_dur
      text = How confident are you in your answer?
      wrapWidth = instruct_width
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    TextComponent confscale_numbers
      letterHeight = confscale_height
      pos = (0, confnumbers_yoffset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $confrating_dur
      wrapWidth = instruct_width
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      text:
        (1)   (2)   (3)   (4)   (5)   (6)

        low                            high
    PolygonComponent R2_highlightbox_conf
      fillColor = None
      lineColor [set every repeat] = $selectboxtrial_color
      lineWidth = 4
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $confrating_dur
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    KeyboardComponent confresp
      allowedKeys = ratingkey_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $confrating_dur
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    TextComponent slowrespmessage_conf
      color = red
      letterHeight = $errormsg_height
      pos = (0, errormsg_offset)
      startVal [time (s)] = $slowresptrial_delay
      stopVal [duration (s)] = $slowresptrial_dur
      text = please respond faster
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    CodeComponent code
      Code Type = Py
      End Routine:
        selectonerow = random(3)*89
  Routine Fbk1
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    TextComponent Fbk_target
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $targetword
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    TextComponent Fbk_topsideword
      letterHeight = $word_height
      pos = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $'1) ' + topsideword
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    TextComponent Fbk_bottomsideword
      letterHeight = $word_height
      pos = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $'2) ' + bottomsideword
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    PolygonComponent resp_highlightbox
      fillColor = None
      lineColor [set every repeat] = $respbox_color
      lineWidth = 4
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    ImageComponent FbkImage
      image [set every repeat] = $fbkimagefile
      pos [set every repeat] = $[fbkimage_offset, respbox_y]
      size = [4, 4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    TextComponent Error_message
      color = red
      letterHeight = $errormsg_height
      pos = (0, errormsg_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $errormsg
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  Routine Fbk2
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    TextComponent R2_Fbk_target
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $targetword
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    TextComponent R2_Fbk_topsideword
      letterHeight = $word_height
      pos = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $'1) ' + topsideword
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    TextComponent R2_Fbk_bottomsideword
      letterHeight = $word_height
      pos = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $'2) ' + bottomsideword
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    PolygonComponent R2_resp_highlightbox
      fillColor = None
      lineColor [set every repeat] = $respbox_color
      lineWidth = 4
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    ImageComponent R2_FbkImage
      image [set every repeat] = $fbkimagefile
      pos [set every repeat] = $[fbkimage_offset, respbox_y]
      size = [4, 4]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    TextComponent R2_Error_message
      color = red
      letterHeight = $errormsg_height
      pos = (0, errormsg_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $errormsg
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  Routine Thank_You
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    TextComponent thank_you_text
      letterHeight = instructword_height
      startVal [time (s)] = 0.0
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      text:
        The experiment is now finished. Please ring the bell to alert the experimenter.

        Thank you for your participation!
    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ShowResp_3
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    TextComponent Fbk_target_showresp_2
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showrespdur
      text [set every repeat] = $targetword
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    TextComponent b_Fbk_topsideword_showresp_2_
      letterHeight = $word_height
      pos = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showrespdur
      text [set every repeat] = $'1) ' + topsideword
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    TextComponent b_Fbk_bottomsideword_showresp_2_
      letterHeight = $word_height
      pos = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showrespdur
      text [set every repeat] = $'2) ' + bottomsideword
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    PolygonComponent highlightbox_showresp_2
      fillColor = None
      lineColor [set every repeat] = $selectbox_color
      lineWidth = 4
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $showrespdur
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  Routine Additup
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    CodeComponent calctotalsfinal
      Code Type = Py
      Begin Routine:
        bonus = (totalcorrect * trialbonus) + totalspent
        thisExp.addData('totalcorrect',totalcorrect)
        thisExp.addData('totalspent',totalspent)
        thisExp.addData('bonus',bonus)
        bonusmessage = "Your score: %d points" % bonus
        totalcorrectmessage = "Total Correct: %d" % totalcorrect
        thisExp.addData('bonusmessage',bonusmessage)
  Routine SetupConstants
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  Routine Instruct1b
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    TextComponent Instruct1b_text
      letterHeight = $instructword_height
      startVal [time (s)] = 0.0
      wrapWidth = $instruct_width
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      text:
        After you make your choice, you will see feedback indicating whether
         you were correct (a green checkmark) or incorrect (a red X).


        The matches are random, so you will not know which choice matches with
        each target word, but you should try to remember the feedback because
        you will see these word matches again.

        A potentially useful strategy is to create sentences in your head that will help you remember which word
        matches with the target word, but you can use your own strategy if you wish.

        Your performance score will depend on how many word pairs you remember correctly
        during the last round.

        You will earn 2 points per correct answer and can earn
        up to 120 points.

        Try to respond as quickly as possible and learn from the feedback.
        You will have 4 seconds to respond during each set of words.


        Any questions?

        Press the '2' key to begin.
    KeyboardComponent Instructresp_2
      allowedKeys = key_2allowed
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct1a
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    TextComponent Instruct1a_text
      letterHeight = $instructword_height
      startVal [time (s)] = 0.0
      wrapWidth = $instruct_width
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      text:
        Part #1

        Today you will complete a 3-part task two times. The first time will serve as a practice to get you used to the task, and the second time will serve as the real test in which you can earn money based on how well you perform.

        In this first part, you will learn word matches.

        First, you will see a target word at the top of the screen, with two possible matches
        below it. Your job is to guess which word matches the top word.

        You will then get feedback about the accuracy of your choice and will try to remember the correct word match based on that feedback.

        In the last round, you will earn points for each word you remember correctly.

        For example:

        ABSTRACT


        1) DOG


        2) PLATE


        To guess Option 1 – press the '1' key.
        To guess Option 2 – press the '2' key.
    KeyboardComponent Instructresp
      allowedKeys = key_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct3a
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    TextComponent Instruct2a_text_3
      letterHeight = $instructword_height
      startVal [time (s)] = 0.0
      wrapWidth = $instruct_width
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      text:
        Part #3

        In this last part, you will see the same sets of words from earlier.

        Your task is to remember the correct match for the top word,
        based on what you learned earlier.

        Press '1' or '2' to select the correct word.

        You will earn 2 points for each correct response and can earn up to 120 points.
        Try to answer as many trials correctly as possible to boost your score!

        Any questions?

        Press the '2' key to begin.
    KeyboardComponent Instructresp_6
      allowedKeys = key_2allowed
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ShowResp
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    PolygonComponent highlightbox_showresp
      fillColor [set every repeat] = $[-1.0000, -1.0000, -1.0000]
      lineColor [set every repeat] = $selectbox_color
      lineWidth = 6
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (.33, .12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Fbk_target_showresp
      letterHeight = .1
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $mathprob
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    TextComponent Fbk_topsideword_showresp
      letterHeight = .1
      pos = (0,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'a) ' + topside
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    TextComponent Fbk_bottomsideword_showresp
      letterHeight = .1
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'b) ' + botside
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        x = 0
        errormsg = ''
        if Test3response2.rt >= 0:
            fbkimagefile = 'blacksquare.png'
        else:
            fbkimagefile = 'noresponse.png'
            errormsg = 'please respond faster'
    ImageComponent image
      image [set every repeat] = $fbkimagefile
      pos = [0, -.285]
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent Error_message2
      color = red
      letterHeight = $.075
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $errormsg
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  Routine Test3
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    CodeComponent PlaceWords_3
      Code Type = Py
      Begin Routine:
        if random()>.5:
            topsideword = R1Word1
            bottomsideword = R1Word2
            r3reversed = False
        else:
            topsideword = R1Word2
            bottomsideword = R1Word1
            r3reversed = True
    TextComponent StudyView1_target_3
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $targetword
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    TextComponent StudyView_topsideword_3
      letterHeight = $word_height
      pos = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $'1) ' + topsideword
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    TextComponent StudyView1_bottomsideword_3
      letterHeight = $word_height
      pos = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $'2) ' + bottomsideword
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    KeyboardComponent Test3response
      allowedKeys = key_list
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $study2dur
      storeCorrect = True
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    CodeComponent CountCorrect
      Code Type = Py
      End Routine:
        errormsg=''
        if r3reversed:
            correctkey = key_list[2-correctword_list[WordIndex-1]]
        else:
            correctkey = key_list[correctword_list[WordIndex-1]-1]

        if Test3response.keys == correctkey:
            r3responseiscorrect = True
            r3chosenword = correctword_list[WordIndex-1]
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            totalcorrect = totalcorrect + 1
        elif Test3response.keys:
            r3responseiscorrect = False
            r3chosenword = 3 - correctword_list[WordIndex-1]
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
        else:
            #no response
            r3responseiscorrect = False
            r3chosenword = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = targetword_offset
            errormsg = 'no response'

        if Test3response.keys == key_list[0]: #top word selected
            respbox_y = topword_offset
        elif Test3response.keys == key_list[1]: #bottom word selected
            respbox_y = bottomword_offset
        if Test3response.keys:
            selectboxtrial_color = selectbox_color
            showrespdur = study2dur - Test3response.rt
            confrating_dur = maxconffbkchoice_dur
            choosefbk_dur = maxconffbkchoice_dur
            slowresptrial_delay = slowrespmessage_delay
            slowresptrial_dur = slowrespmessage_dur
        else:
            showrespdur = 0
            selectboxtrial_color = background_color
            confrating_dur = 0
            choosefbk_dur = 0
            slowresptrial_delay = 0
            slowresptrial_dur = 0
        thisExp.addData('r3reversed',r3reversed)
        thisExp.addData('r3responseiscorrect', r3responseiscorrect)
        thisExp.addData('r3chosenword', r3chosenword)
  Routine StudyView2
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    CodeComponent PlaceWords_2
      Code Type = Py
      Begin Routine:
        if random()>.5:
            topsideword = R1Word1
            bottomsideword = R1Word2
            r2reversed = False
        else:
            topsideword = R1Word2
            bottomsideword = R1Word1
            r2reversed = True

        #trialfbkcost = fbkcost_list[WordIndex-1]
        #costnum = str(abs(trialfbkcost))
        #
        #if trialfbkcost > 0:
        #    fbk_question = "Do you want feedback?\n (+%s cents if you choose YES)" % costnum
        #    costsign = '+'
        #else:
        #    fbk_question = "Do you want feedback?\n (-%s cents if you choose YES)" % costnum
        #    costsign = '-'
        #
    TextComponent StudyView1_target_2
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $targetword
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    TextComponent StudyView_topsideword_2
      letterHeight = $word_height
      pos = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $'1) ' + topsideword
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    TextComponent StudyView1_bottomsideword_2
      letterHeight = $word_height
      pos = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $'2) ' + bottomsideword
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    KeyboardComponent Study2Response
      allowedKeys = key_list
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $study2dur
      storeCorrect = True
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    CodeComponent SetFbk2
      Code Type = Py
      End Routine:
        errormsg=''
        if r2reversed:
            correctkey = key_list[2-correctword_list[WordIndex-1]]
        else:
            correctkey = key_list[correctword_list[WordIndex-1]-1]

        if Study2Response.keys == correctkey:
            r2responseiscorrect = True
            r2chosenword = correctword_list[WordIndex-1]
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
        elif Study2Response.keys:
            r2responseiscorrect = False
            r2chosenword = 3 - correctword_list[WordIndex-1]
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
        else:
            #no response
            r2responseiscorrect = False
            r2chosenword = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = targetword_offset
            errormsg = 'no response'

        if Study2Response.keys == key_list[0]: #top word selected
            respbox_y = topword_offset
        elif Study2Response.keys == key_list[1]: #bottom word selected
            respbox_y = bottomword_offset
        if Study2Response.keys:
            selectboxtrial_color = selectbox_color
            showrespdur = study2dur - Study2Response.rt
            confrating_dur = maxconffbkchoice_dur
            choosefbk_dur = maxconffbkchoice_dur
            slowresptrial_delay = slowrespmessage_delay
            slowresptrial_dur = slowrespmessage_dur
        else:
            showrespdur = 0
            selectboxtrial_color = background_color
            confrating_dur = 0
            choosefbk_dur = 0
            slowresptrial_delay = 0
            slowresptrial_dur = 0
        thisExp.addData('r2reversed',r2reversed)
        thisExp.addData('r2responseiscorrect', r2responseiscorrect)
        thisExp.addData('r2chosenword', r2chosenword)
  Routine StudyView1
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    CodeComponent PlaceWords
      Code Type = Py
      Begin Routine:
        if random()>.5:
            topsideword = R1Word1
            bottomsideword = R1Word2
            r1reversed = False
        else:
            topsideword = R1Word2
            bottomsideword = R1Word1
            r1reversed = True
    TextComponent StudyView1_target
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $studyviewwindow
      text [set every repeat] = $targetword
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    KeyboardComponent Study1Response
      allowedKeys = key_list
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $studyviewwindow
      storeCorrect = True
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    TextComponent StudyView_topsideword
      letterHeight = $word_height
      pos = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $studyviewwindow
      text [set every repeat] = $'1) ' + topsideword
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    TextComponent StudyView1_bottomsideword
      letterHeight = $word_height
      pos = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $studyviewwindow
      text [set every repeat] = $'2) ' + bottomsideword
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    CodeComponent SetFbk
      Code Type = Py
      End Routine:
        errormsg=''
        if random()>.5 and Study1Response.keys : # coin flip to determine if response was correct
            responseiscorrect = True
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            r1correct_list[WordIndex-1] = True
            if Study1Response.keys == key_list[0]: #first word selected, response is last key pressed
                responseside = 'top'
                correctside = 'top'
                correctword = topsideword
                respbox_y = topword_offset
                if r1reversed:
                    correctwordindex=2
                else:
                    correctwordindex=1
            else: #second word selected
                responseside = 'bottom'
                correctside = 'bottom'
                correctword = bottomsideword
                respbox_y = bottomword_offset
                if r1reversed:
                    correctwordindex=1
                else:
                    correctwordindex=2
        elif Study1Response.keys : #response is made but incorrect (by coin flip above)
            responseiscorrect = False
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
            r1correct_list[WordIndex-1] = False
            if Study1Response.keys == key_list[0]: #first word selected
                responseside = 'top'
                correctside = 'bottom'
                correctword = bottomsideword
                respbox_y = topword_offset
                if r1reversed:
                    correctwordindex=1
                else:
                    correctwordindex=2
            else:
                responseside = 'bottom'
                correctside = 'top'
                correctword = topsideword
                respbox_y = bottomword_offset
                if r1reversed:
                    correctwordindex=2
                else:
                    correctwordindex=1
        else:
            #no response
            responseiscorrect = False
            r1correct_list[WordIndex-1] = False
            responseside = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = targetword_offset
            errormsg = 'no response'
            if random()>.5:
                correctside = 'top'
                correctword = topsideword
                if r1reversed:
                    correctwordindex=2
                else:
                    correctwordindex=1
            else:
                correctside = 'bottom'
                correctword = bottomsideword
                if r1reversed:
                    correctwordindex=1
                else:
                    correctwordindex=2
        if Study1Response.keys:
            showrespdur = studyviewwindow - Study1Response.rt
        else:
            showrespdur = 0
        correctword_list[WordIndex-1] = correctwordindex
        thisExp.addData('r1reversed',r1reversed)
        thisExp.addData('topsideword', topsideword)
        thisExp.addData('bottomsideword', bottomsideword)
        thisExp.addData('responseiscorrect', responseiscorrect)
        thisExp.addData('responseside', responseside)
        thisExp.addData('correctside',correctside)
        thisExp.addData('correctword',correctword)
        thisExp.addData('correctwordindex',correctwordindex)
  Routine EndPart1
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    TextComponent text
      letterHeight = .04
      startVal [time (s)] = 0.0
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      text:
        That was the end of the task.

        To finish the experiment press 't', then complete a brief questionnaire.
    KeyboardComponent contpart2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Both
  Routine EndPart2
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    TextComponent text_2
      letterHeight = .04
      startVal [time (s)] = 0.0
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      text:
        You passed the practice task!

        Press ‘t’ to advance to the main task instructions
    KeyboardComponent contpart2_2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndPart3
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    TextComponent text_3
      letterHeight = instructword_height
      startVal [time (s)] = 0.0
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      text:
        That was the end of Part #3. Please ring the bell.
    KeyboardComponent Lastresp
      allowedKeys = instruc_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent totalcorrect_text
      letterHeight = instructword_height
      pos = (0, totalcorrect_offset)
      startVal [time (s)] = 0.0
      text [set every repeat] = $totalcorrectmessage
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    TextComponent bonus_text
      letterHeight = instructword_height
      pos = (0, bonus_offset)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bonusmessage
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  Routine ChooseFbk
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        selectbox_color = 'white'
        response_record = ''
        CorrResp = 1
        r3reversed = []
        topside = CorrRespDig1
        botside = CorrRespDig2

        if random()>.5:
            topside = CorrRespDig1
            botside = CorrRespDig2
            r3reversed = False
            CorrResp = 1
        else:
            topside = CorrRespDig2
            botside = CorrRespDig1
            r3reversed = True
            CorrResp = 2

        thisExp.addData('r3reversed',r3reversed)
        thisExp.addData('CorrResp',CorrResp)
        thisExp.addData('topside',topside)
        thisExp.addData('botside',botside)
    TextComponent fbkcosttext
      letterHeight = .1
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $mathprob
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    TextComponent StudyView_topsideword_4
      letterHeight = .1
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $'a) ' + topside
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    TextComponent StudyView1_bottomsideword_4
      letterHeight = .1
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $'b) ' + botside
    KeyboardComponent Test3response2
      allowedKeys = '1', '2'
      correctAns = $CorrResp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        respbox_y = -1
        keys = event.getKeys()
        if '1' in keys:
            respbox_y = .1
        elif '2' in keys:
            respbox_y = -.05
  Routine Instruct2b
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    TextComponent Instruct2b_text
      letterHeight = $instructword_height
      startVal [time (s)] = 0.0
      wrapWidth = $instruct_width
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      text:
        After you rate your confidence, you will have an opportunity
        to get feedback again about whether you selected the correct word.

        For each trial, you will solve 1 very simple addition problem before receiving feedback again.

        Keep in mind that you will be rewarded with 2 points for every
        correct response you make during the final round. Since
        your final score will depend on your performance during the final
        round, it is worthwhile to learn from the feedback so that
        you can learn the word pairs well.

        Any questions?

        Press the '2' key to begin.
    KeyboardComponent Instructresp_4
      allowedKeys = key_2allowed
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct2c
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    TextComponent Instruct2a_text_2
      letterHeight = $instructword_height
      startVal [time (s)] = 0.0
      wrapWidth = $instruct_width
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      text:
        That was the end of the first part.

        In Part #2, you will see the same sets of words that you learned
        in Part #1.

        First, select the correct word that is paired with the top word
        (based on feedback you got in Part #1)

        Next, you will be asked how confident you are that your answer is
        correct. Press a number key '1' through '6' to indicate your
        confidence.
        1 = ~50% confidence (LOW: ~50/50 guess)
        2 = ~60% confidence
        3 = ~70% confidence
        4 = ~80% confidence
        5 = ~90% confidence
        6 = ~100% confidence (HIGH: basically 100% sure)
    KeyboardComponent Instructresp_5
      allowedKeys = key_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct2a
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    TextComponent Instruct2a_text
      letterHeight = $instructword_height
      startVal [time (s)] = 0.0
      wrapWidth = $instruct_width
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      text:
        Part #2

        Now you will see the words from Part #1 again.
        Your task is to remember the correct match for the top word, based on what you learned in Part #1.

        First, press '1' or '2' to select the correct word. The sets of words may not be in the same order
        as when you saw them the first time.


        Next, you will be asked to rate how confident you are that your answer is
        correct. Press a number key from '1' through '6' to indicate your
        confidence.

        1 = ~50% confidence (LOW: ~50/50 guess)
        2 = ~60% confidence
        3 = ~70% confidence
        4 = ~80% confidence
        5 = ~90% confidence
        6 = ~100% confidence (HIGH: ~100% sure)
    KeyboardComponent Instructresp_3
      allowedKeys = instruc_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent buffer
      Code Type = Py
      Begin Routine:
        event.clearEvents()
  Routine Instruct
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    TextComponent text_5
      letterHeight = .04
      startVal [time (s)] = 0.0
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      text:
        Introduction

        For this experiment, you will be solving math multiplication problems in your head. Our primary goal is to understand how well college students perform mental arithmetic.

        To maintain the integrity of our experiment we respectfully ask please DO NOT USE a cell phone, calculator, or pen/paper for this experiment. We want you to try and do everything in your head.


        Press ‘t’ to continue to the next page
    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Both
      Before JS Experiment:
        var myBrowser;
        var sUsrAg;
        var nIdx;
        function getBrowserId () {
            var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        myBrowser = getBrowserId();
      Begin JS Experiment:
        psychoJS.experiment.addData("Browser", myBrowser)
  Routine Instruct2
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    TextComponent text_6
      letterHeight = 0.033
      startVal [time (s)] = 0.0
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      text:
        Main Task

        Now that you have gotten a feel for the task, you are now ready for the real test. You will again see multiplication problems like before, however these problems will range in their difficulty. You will have 10 seconds to make each response.

        Please try your best to calculate the correct response instead of guessing.

        Example

        12 x 2 =

        a) 22
        b) 24

        To pick response a) press the ‘1’ key.
        To pick response b) press the ‘2’ key.


        Press ‘1’ or ‘2’ to begin the main task.
    KeyboardComponent key_resp_3
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine repeat_instruct
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    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please Try Again

        You got less than 3 correct responses during the practice round. In order to advance to the main task, you need to get at least 3 correct responses during the practice round.

        Remember, to pick response a) press the ‘1’ key. To pick response b) press the ‘2’ key.


        Press ‘t’ to restart the practice round.
    CodeComponent code_3
      Code Type = JS
      Before JS Experiment:
        var nCorr = 0;
        var nCorr2 = 0;
        var nCorr3 = 0;
        var practice_round = 0;
        var eachResp = 0;
        console.log(nCorr);
      Begin JS Routine:
        console.log(nCorr)
        practice_round = practice_round + 1;
        eachResp = 0;
        console.log(nCorr)
        console.log(nCorr2)
        console.log(nCorr3)



        if (practice_round === 1) {
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('Test3response2.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorr += psychoJS.experiment._trialsData[eachResp]['Test3response2.corr'];
            }
          }
        }else if (practice_round === 2) {
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('Test3response2.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorr2 += psychoJS.experiment._trialsData[eachResp]['Test3response2.corr'];
            }
          }
            nCorr2 = nCorr2 - nCorr;
        } else{
          for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++){
            if ('Test3response2.corr' in psychoJS.experiment._trialsData[eachResp]) {
            nCorr3 += psychoJS.experiment._trialsData[eachResp]['Test3response2.corr'];
            }
          }
            nCorr3 = nCorr3 - (nCorr + nCorr2);
        }

        if (practice_round === 1) {
        if (nCorr > 2) {
            trials_3.finished = true;
            }
        } else if (practice_round === 2) {
            if (nCorr2 > 2) {
            trials_3.finished = true;
            }
            } else {
                trials_3.finished = false;
                }
      Each JS Frame:
        console.log(practice_round)
        console.log(nCorr)
        console.log(nCorr2)
        console.log(nCorr3)


        if (practice_round === 1) {
        if (nCorr > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
            }

        if (practice_round === 2) {
        if (nCorr2 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
            }

        if (practice_round === 3) {
        if (nCorr3 > 2) {
            console.log("true")
            continueRoutine = false; // until we're told otherwise
            } else {
                console.log("false")
                continueRoutine = true;
                }
            }
    KeyboardComponent key_resp_4
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac_instruct
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    TextComponent text_8
      letterHeight = 0.036
      startVal [time (s)] = 0.0
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      text:
        Practice Round

        First you will do a simple practice round consisting of 4 questions. You must get at least 3 questions correct in order to advance to the main task.

        You will see a multiplication problem presented at the top of the screen with two possible choices underneath it. Your job is to pick the correct answer. You will have 10 seconds to make each response before moving onto the next trial.

        Example

          8 x 1 =

          a) 8
          b) 1

        To pick response a) press the ‘1’ key.
        To pick response b) press the ‘2’ key.

        Press ‘1’ or ‘2’ to begin the practice round.
    KeyboardComponent key_resp_5
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruct
  Routine Prac_instruct
  Routine GetReady
  LoopInitiator trials_3 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = practice_Test.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'mathprob': '9 x 1', 'CorrResp': 1, 'CorrRespDig1': 9, 'CorrRespDig2': 1},
        {'mathprob': '7 x 1', 'CorrResp': 1, 'CorrRespDig1': 7, 'CorrRespDig2': 1},
        {'mathprob': '1 x 2', 'CorrResp': 1, 'CorrRespDig1': 2, 'CorrRespDig2': 1},
        {'mathprob': '1 x 6', 'CorrResp': 1, 'CorrRespDig1': 6, 'CorrRespDig2': 1}]
      Routine GetReady
      Routine ChooseFbk
      Routine ShowResp
    LoopTerminator trials_2
    Routine repeat_instruct
  LoopTerminator trials_3
  Routine EndPart2
  Routine Instruct2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Test_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'mathprob': '6 x 29 = ', 'CorrResp': 1, 'CorrRespDig1': 174, 'CorrRespDig2': 184, 'cond': 'hard', 'foil': '10+'},
      {'mathprob': '8 x 36 = ', 'CorrResp': 1, 'CorrRespDig1': 288, 'CorrRespDig2': 280, 'cond': 'hard', 'foil': '1mult-'},
      {'mathprob': '9 x 47 = ', 'CorrResp': 1, 'CorrRespDig1': 423, 'CorrRespDig2': 433, 'cond': 'hard', 'foil': '10+'},
      {'mathprob': '3 x 56 = ', 'CorrResp': 1, 'CorrRespDig1': 168, 'CorrRespDig2': 171, 'cond': 'hard', 'foil': '1mult+'},
      {'mathprob': '4 x 65 = ', 'CorrResp': 1, 'CorrRespDig1': 260, 'CorrRespDig2': 264, 'cond': 'hard', 'foil': '1mult+'},
      {'mathprob': '6 x 72 = ', 'CorrResp': 1, 'CorrRespDig1': 432, 'CorrRespDig2': 442, 'cond': 'hard', 'foil': '10+'},
      {'mathprob': '2 x 84 = ', 'CorrResp': 1, 'CorrRespDig1': 168, 'CorrRespDig2': 166, 'cond': 'hard', 'foil': '1mult-'},
      {'mathprob': '95 x 2 = ', 'CorrResp': 1, 'CorrRespDig1': 190, 'CorrRespDig2': 192, 'cond': 'hard', 'foil': '1mult+'},
      {'mathprob': '38 x 3 =', 'CorrResp': 1, 'CorrRespDig1': 114, 'CorrRespDig2': 111, 'cond': 'hard', 'foil': '1mult-'},
      {'mathprob': '43 x 7 = ', 'CorrResp': 1, 'CorrRespDig1': 301, 'CorrRespDig2': 291, 'cond': 'hard', 'foil': '10-'},
      {'mathprob': '57 x 5 =', 'CorrResp': 1, 'CorrRespDig1': 285, 'CorrRespDig2': 275, 'cond': 'hard', 'foil': '10-'},
      {'mathprob': '64 x 9 =', 'CorrResp': 1, 'CorrRespDig1': 576, 'CorrRespDig2': 586, 'cond': 'hard', 'foil': '10+'},
      {'mathprob': '75 x 8 =', 'CorrResp': 1, 'CorrRespDig1': 600, 'CorrRespDig2': 592, 'cond': 'hard', 'foil': '1mult-'}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
    Routine GetReady
    Routine ChooseFbk
    Routine ShowResp
  LoopTerminator trials
  Routine EndPart1
